Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet_wash.dev
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        //author Chuan Wang, version 150803

        var global = GetGlobalObject();
        //if(global.runsetMode) global.updateRunset();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1," + columns;
        var beadVolume = global.settings.beadVolume || 50;
        var sampleVolume = global.settings.sampleVolume || 50;
        var washVolume = 200;
        var washes = 2;
        var elutionVolume = global.settings.elutionVolume || 30;
        var MAX_VOLUME = 175;
        var MAX_MIX_VOLUME = 160;
        var PRE_ASP = 5;
        var PRE_ASP_LARGE = 15;

        // Number of columns with samples:
        var columnsOfSamples = columns;
        // Max aspiration volume:
        var maxAspVolume = 175;
        // Max volume to use when mixing:
        var maxMixVolume = 160;

        var testMode = (global.testMode) ? true : false;
        var bindTime = testMode ? 1 : 5 * 60;
        var elutionTime = testMode ? 1 : 2 * 60;
        var ethanolDryTime = testMode ? 1 : 10 * 60;
        var pelletTime = testMode ? 1 : 60;
        var pelletTimeShort = testMode ? 1 : 30;
        var pelletTimeLong = testMode ? 1 : 180;
Main_Processes
  Process
    Plate name: TipBox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: TransferEthanol
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    Task Bravo::SubProcess
      Sub-process name: BeadStirUp
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    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
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    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task BuiltIn::Spawn Process
      Process to spawn: EthanolPlate
    Task Bravo::SubProcess
      Sub-process name: rinseTips
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: EthanolPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: TransferEthanol
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    Task BuiltIn::Spawn Process
      Process to spawn: BeadsPlate
    Task Bravo::SubProcess
      Sub-process name: wash
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  Process
    Plate name: ElutionBufferReservior
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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  Process
    Plate name: EthanolReservior
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: TransferEthanol
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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  Process
    Plate name: BeadsPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: BeadStirUp
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    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
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  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: elute
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  Pipette_Process Name=BeadDistribution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Distributing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        // Column 12:
        task.skip()
        task.Wellselection = [[1, 12]];
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Preaspiration
        if(columnsOfSamples == 1) {
           task.skip();
        }
        task.Volume = PRE_ASP;
      Location, plate: BeadsPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var totalColumns = columnsOfSamples - 1;
        var currentColumn = 1;
        var mixVolume;
    Task BuiltIn::Loop
      TaskScript:
        if(columnsOfSamples == 1) {
           task.skip();
        }
      Number of times to loop: =totalColumns;
      Change tips every N times, N = : 1
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 18
      TaskScript:
        if(columnsOfSamples == 1) {
           task.skip();
        }
        mixVolume = 0.8 * beadVolume * (columnsOfSamples - currentColumn + 1);
        task.Volume = (mixVolume > maxMixVolume)  ? maxMixVolume : mixVolume;
      Location, plate: BeadsPlate
      Liquid class: j_slow_mixing
      Mix cycles: 3
      Aspirate distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        if(columnsOfSamples == 1) {
           task.skip();
        }
        task.Volume = beadVolume;
      Location, plate: BeadsPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        if(columnsOfSamples == 1) {
           task.skip();
        }
        task.Wellselection = [[1,1+currentColumn]];
        task.Volume = beadVolume;
      Location, plate: BeadsPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
      TaskScript:
        if(columnsOfSamples == 1) {
           task.skip();
        } else {
           currentColumn++;
        }
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        // Blowout
        if(columnsOfSamples == 1) {
           task.skip();
        }
        task.Volume = PRE_ASP;
        task.Wellselection = [[1,1]];
      Location, plate: BeadsPlate
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Column 12:
        task.Wellselection = [[1, 12]];
      Location, plate: TipBox
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadStirUp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 20
      TaskScript:
        // Column 12:
        task.Wellselection = [[1, 12]];
      Location, plate: TipBox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // Pre-aspiration
        task.Volume = PRE_ASP;
      Location, plate: BeadsPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 62
      TaskScript:
        var mixVolume = 0.7 * (beadVolume * columnsOfSamples);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadsPlate
      Liquid class: j_slow_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Blowout
        task.Volume = PRE_ASP;
      Location, plate: BeadsPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: TipBox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_fast_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = elutionVolume+MAX_VOLUME+MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = false;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservior
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservior
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEthanol
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = washVolume*washes+MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: EthanolReservior
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: EthanolReservior
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: EthanolPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: EthanolPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=bind
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = bindMixVolume;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadsPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 65
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 206
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadsPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadsPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 1;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_mixing";
        var mPreAspVolume = PRE_ASP;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 5;
        var mMixVolume = elutionVolume * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadsPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 15
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 82
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadsPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadsPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BeadsPlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = PRE_ASP;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 0.4;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FinalPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FinalPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BeadsPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = sampleVolume + beadVolume + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadsPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Preaspiratevolume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Distancefromwellbottom = mDispDistance;
        task.Liquidclass = mLiquidClass;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var bindMixVolume = 0.8 * (beadVolume + sampleVolume);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: TipBox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Preaspiratevolume = PRE_ASP_LARGE;
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: BeadsPlate
      Volume: =sampleVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 23
      Location, plate: BeadsPlate
      Volume: =bindMixVolume;
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 3
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = PRE_ASP_LARGE;
      Location, plate: BeadsPlate
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: TipBox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      Location, plate: EthanolPlate
      Volume: =PRE_ASP;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(washVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: EthanolPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: BeadsPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -14
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript: task.Volume = (washVolume * 0.8 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : washVolume * 0.8;
      Location, plate: BeadsPlate
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BeadsPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((washVolume + 10) / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: BeadsPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Waste
      Volume: =PRE_ASP;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: TipBox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: BeadsPlate
      Location to use, location: 7
      Reservation time: 0
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
