<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-1" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage1" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic13" children="Controls">
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      <Property name="Text">Science for Life Laboratory Stockholm 2015</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Science for Life Laboratory Stockholm 2015" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Science for Life Laboratory Stockholm 2015" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic12" children="Controls">
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      <Property name="Text">Chuan Wang</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Chuan Wang" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Chuan Wang" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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      <Property name="Text"> PAUSE</Property>
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" PAUSE" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic11" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="statusString" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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      <Property name="Text"> START</Property>
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      <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="var path = &quot;C:/VWorks Workspace/Protocol Files/CW-test/AMPure_purification_CW.pro&quot;;&#xA;var form = &quot;AMPure.VWForm&quot;;&#xA;run(&quot;C:/VWorks Workspace/Protocol Files/facility/resources/clear_inventory.bat&quot;, true);&#xA;&#xA;formColumns = parseInt(formColumns, 10);&#xA;var settings = {sampleVolume: parseFloat(formSampleVolume),&#xA;		beadVolume: parseFloat(formBeadVolume),&#xA;		elutionVolume: parseFloat(formElutionVolume)};&#xA;&#xA;runset.clear();&#xA;runset.appendProtocolFileToRunset(path, 1, &quot;&quot;, form);" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" START" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic8" children="Controls">
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      <Property name="Text">Columns of samples:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Columns of samples:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Columns of samples:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formColumns" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="1;2;3;4;5;6;7;8;9;10;11;12" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="12" ValueToDisplay="" Hide_if="Const(0)" />
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      <Parameter Name="Value" Description="" Type="1" Value="6" ValueToDisplay="" Hide_if="" />
      <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="1;2;3;4;5;6;7;8;9;10;11;12;" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox6" children="Controls">
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      <Property name="Text">30</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formElutionVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="10" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="200" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="10" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="30" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="10" />
          <Range Value="200" />
        </Ranges>
      </Parameter>
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      <Parameter Name="Value" Description="" Type="1" Value="30" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox2" children="Controls">
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      <Property name="Text">50</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBeadVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="5" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="100" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="5" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="50" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="5" />
          <Range Value="100" />
        </Ranges>
      </Parameter>
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      <Parameter Name="Value" Description="" Type="1" Value="50" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox1" children="Controls">
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      <Property name="Text">50</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formSampleVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="5" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="200" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="5" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="50" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="5" />
          <Range Value="200" />
        </Ranges>
      </Parameter>
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      <Parameter Name="Value" Description="" Type="1" Value="50" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic7" children="Controls">
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      <Property name="Text">Elution volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Elution volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Elution volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
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      <Property name="Text">Bead volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Bead volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Bead volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
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      <Property name="Text">Sample volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Sample volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Sample volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
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      <Property name="Text">AMPure XP purification</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="AMPure XP purification" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="AMPure XP purification" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>
